OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Classifier Training
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Overview

  This scenario is used to train data for the "free will experiment".
  Main Python script settings are:
  	signals (csv)
  	keyboard stimulations (csv)
  	output file (python pickle) - trained (e.g. ./python-out-[$core{date}-$core{time}].pkl)

0xc73e83ec CSV File Reader => #0
  Filename = E:/Tilen/FAX/2. stopnja/UI/projekt-bci/free-will/signals/record-sig-[2017.05.15-23.11.00].csv
  Column separator = ;
  Don't use the file time = false
  Samples per buffer = 32
0xc73e83ec CSV File Reader => #1
  Filename = E:/Tilen/FAX/2. stopnja/UI/projekt-bci/free-will/signals/record-stim-[2017.05.15-23.11.00].csv
  Column separator = ;
  Don't use the file time = false
  Unused parameter = 0
Data=#0, Stimulations=#1 -> 0xc73e83ec Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

0xc67a01dc Python scripting
  Clock frequency (Hz) = 64
  Script = E:/Tilen/FAX/2. stopnja/UI/projekt-bci/free-will/scripts/python-learning.py
  InputCSVSignal = E:/Tilen/FAX/2. stopnja/UI/projekt-bci/free-will/signals/record-sig-[2017.05.15-23.11.00].csv
  InputCSVStimulations = E:/Tilen/FAX/2. stopnja/UI/projekt-bci/free-will/signals/record-stim-[2017.05.15-23.11.00].csv
  SaveFile =
  WindowSize (ms) = 100
  NumOfPrevWindows = 4
  NumOfWindowsBefore = 4
  NumOfWindowsAfter = 0
  K-folds = 10
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrialStop
  Action to perform = Stop
